
import ij.gui.*; 
import ij.IJ;
import ij.Menus;
import ij.io.*;
import ij.plugin.*;
import ij.*;

import ij.ImagePlus;
import ij.ImageStack;
import ij.measure.ResultsTable;
import ij.process.ImageStatistics;

// ---------------------------------------------------------------------------------
// INITIALIZATION
// ---------------------------------------------------------------------------------

initExposureTime = mmc.getExposure();
stageSpeed = 5; // mm/s
initObjective = mmc.getConfigGroupState("Objective").getSetting("DObjective","Label").getPropertyValue();

String[] objectiveArray = new String[4]; 
objectiveArray[0]="10x   "; 
objectiveArray[1]="20x   "; 
objectiveArray[2]="40x   "; 
objectiveArray[3]="50x   ";


// ---------------------------------------------------------------------------------
// GENERATE CHIP OVERVIEW
// ---------------------------------------------------------------------------------


GenericDialog overviewDialog = new GenericDialog("1. Generate Chip Overview");
overviewDialog.addMessage("Ensure you are focused at the top-left corner of scan region, exposure time is OK, and ");
overviewDialog.addMessage("the polarization optics are set to : 0 (Left-most), 60 (second on left), 351 (lower on right), 0 (upper on right).");
overviewDialog.addMessage("");
overviewDialog.addMessage("Overview region size in millimeters:");
overviewDialog.addNumericField("X", 3,1);
overviewDialog.addNumericField("Y", 8,1);
overviewDialog.addRadioButtonGroup("Objective",objectiveArray,1,4, initObjective + "   "); 

overviewDialog.showDialog();
if (overviewDialog.wasCanceled()){
	progressFrame.setVisible(false);
	progressFrame.dispose();
	return false;
}

overviewX = overviewDialog.getNextNumber();
overviewY = overviewDialog.getNextNumber();
objLongName = overviewDialog.getNextRadioButton();

// Set the z-stack properties depending on the objective
// Note that properties scale roughly with the NA, not the magnification
// TODO: consider changing for dry media
zStackWidthUm = 0;zStepUm = 0.0;objNA = 0.0;objMag = 0;
switch (objLongName.substring(0,3)) {
	case "10x":
		zStackWidthUm = 48;
		zStepUm = 3;
		objNA = 0.3;
		objMag = 10;
		break;
	case "20x":
		zStackWidthUm = 24;
		zStepUm = 1.5;
		objNA = 0.45;
		objMag = 20;
		break;
	case "40x":
		zStackWidthUm = 8;
		zStepUm = .2;
		objNA = 0.9;
		objMag = 40;
		break;
	case "50x":
		zStackWidthUm = 8;
		zStepUm = .2;
		objNA = 0.8;
		objMag = 50;
		break;
}
nZPos = zStackWidthUm/zStepUm;
// Point Grey camera issue: the first frame is always blank.
burstFrameNo = 16 + 1; // frames to average at each z-position 

// Set microscope configuration and get image scale factors
mm.setExposure(initExposureTime);
mmc.setConfig("Objective",objLongName.substring(0,3));
imWidth = mmc.getImageWidth();
imHeight = mmc.getImageHeight();
pixelSizeUm = mmc.getPixelSizeUm();
fieldOfViewXmm = imWidth*pixelSizeUm/1000.0;
fieldOfViewYmm = imHeight*pixelSizeUm/1000.0;
nPosX = Math.ceil(overviewX / fieldOfViewXmm);
nPosY = Math.ceil(overviewY / fieldOfViewYmm);

// Prepare Progress panel
JFrame progressFrame = new JFrame("Acquisition Progress");

Font boldFont = new Font("Deja Vu MS", Font.BOLD, 14);
Font normalFont = new Font("Deja Vu MS", Font.PLAIN, 14);

GridLayout layout = new GridLayout(0,1, 20, 0);
layout.setHgap(0);
layout.setVgap(25);
JPanel progressPanel = new JPanel();
progressPanel.setLayout(layout);
JLabel setupLabel = new JLabel("\u2611 1. Setup");
setupLabel.setFont(boldFont);
progressPanel.add(setupLabel);

JPanel overviewPanel = new JPanel();
GridLayout overviewLayout = new GridLayout(1, 0, 0, 20);
overviewPanel.setLayout(overviewLayout);
JLabel overviewLabel = new JLabel("\u2610 2. Chip overview");
overviewLabel.setFont(normalFont);
overviewPanel.add(overviewLabel);
JProgressBar overviewBar = new JProgressBar(0, 100);
overviewBar.setStringPainted(true);
overviewPanel.add(overviewBar);
progressPanel.add(overviewPanel);

JPanel scanPanel = new JPanel();
GridLayout scanLayout = new GridLayout(1, 0, 0, 20);
scanPanel.setLayout(scanLayout);
JLabel scanLabel = new JLabel("\u2610 3. Array Scan");
scanLabel.setFont(normalFont);
scanPanel.add(scanLabel);
JProgressBar progressbar = new JProgressBar(0, 100);
progressbar.setStringPainted(true);
scanPanel.add(progressbar);
progressPanel.add(scanPanel);

progressPanel.setBorder(BorderFactory.createEmptyBorder(10,10,10,10));
progressFrame.getContentPane().add(progressPanel, BorderLayout.NORTH);

JPanel botPanel = new JPanel(); //bottom panel
botPanel.setLayout(new GridLayout(0,1,0,0));
JPanel buttonPanel = new JPanel();
buttonPanel.setLayout(new GridLayout(1,2,20,20));
JButton pauseButton = new JButton("Pause");
pauseButton.setEnabled(false); // <-- TODO: implement pause functionality
didPause = false;
pauseButton.addActionListener(new ActionListener() {
	actionPerformed (e) {
		didPause = true;
		notification.setText("Acqusition paused");
	}
});
buttonPanel.add(pauseButton);
JButton cancelButton = new JButton("Cancel");
didCancel = false;
cancelButton.addActionListener(new ActionListener() {
	actionPerformed (e) {
		didCancel = true;
		notification.setText("Cancelling, please wait...");
	}
});
buttonPanel.add(cancelButton);
JLabel notification = new JLabel("", SwingConstants.CENTER);
notification.setFont(boldFont);

botPanel.add(buttonPanel);
botPanel.add(notification);

botPanel.setBorder(BorderFactory.createEmptyBorder(10,10,10,10));
progressFrame.getContentPane().add(botPanel, BorderLayout.SOUTH);

progressFrame.pack();
progressFrame.setSize(300, 250);
progressFrame.setLocation(100,100);
progressFrame.setVisible(true);
progressFrame.setResizable(false);


combiner = new StackCombiner();
ic = new ImageCalculator();
is = new ImageStatistics();
statOptions = is.MEDIAN;

zProjector = new ZProjector();
zProjector.setMethod(0);

// Prepare for acquisition
mm.live().setLiveMode(false);
liveDisplay = mm.live().getDisplay();
if (liveDisplay != null){
	liveDisplay.forceClosed();
}
mm.data().clearPipeline(); // i.e., 'on-the-fly' processors


// Perform rapid overview scan
burstFrameNo = 16;

startX = mmc.getXYStagePosition().getX();
startY = mmc.getXYStagePosition().getY();

ImagePlus overviewImp;
ImagePlus thisSlice; // declaration is required for correct scope

for (int idx=0; idx<nPosX; idx++){
	thisX = startX - idx*fieldOfViewXmm*1000;
	
	mmc.setXYPosition(thisX+1000.0, startY+1000.0);
	Thread.sleep((int)(overviewX/stageSpeed*1000+500));
	mmc.setXYPosition(thisX, startY);
	Thread.sleep(1000);

	for (int idy=0; idy<nPosY; idy++){
		thisY = startY - idy*fieldOfViewYmm*1000;
		mmc.setXYPosition(thisX, thisY);
		Thread.sleep(1000);

		mmc.stopSequenceAcquisition();
		mmc.clearCircularBuffer();
		burstStack = new ImageStack((int)imWidth, (int) imHeight, burstFrameNo);
		burstImp = new ImagePlus("burst");
		mmc.waitForSystem();

		curFrame = 0;
		mmc.startContinuousSequenceAcquisition(0);
		while ( curFrame < burstFrameNo ){
			if (mmc.getRemainingImageCount() > 0) {
				burstStack.setPixels(mmc.popNextImage(),curFrame+1);
				curFrame++;
			}
			else {
				// Wait for another image to arrive.
				Thread.sleep(5);
			}
		}
		mmc.stopSequenceAcquisition();
		mmc.clearCircularBuffer();

		// Point Grey camera issue: the first frame is always blank.
		burstStack.deleteSlice(1);
		burstImp.setStack(burstStack);
		zProjector.setImage(burstImp);
		zProjector.doProjection();
		imp = new ImagePlus("avg frame", zProjector.getProjection().getProcessor());
		
		if (idy == 0) {
 			thisSlice = imp.duplicate();
 		} else {
 			combinedStack = combiner.combineVertically(thisSlice.getStack(), imp.getStack());
 			thisSlice = new ImagePlus("slice", combinedStack);
 		}

 		pctComplete = Math.round( (idx*nPosY+idy+1)*100/(nPosX*nPosY) );
		overviewBar.setValue((int)pctComplete);

		if(didCancel){
			break;
		}
	}
 	// Add the preview 'slice' to the 'final preview'
 	if ( idx == 0){
 		overviewImp = thisSlice;
 	} else {
 		combinedSlices = combiner.combineHorizontally(overviewImp.getStack(), thisSlice.getStack());
 		overviewImp = new ImagePlus(saveFname + "_composite_image", combinedSlices);
 	}
	
	if(didCancel){
		break;
	}
}
mmc.setXYPosition(startX, startY);
overviewLabel.setText("\u2611 2. Chip overview");
overviewLabel.setFont(boldFont);

if(didCancel){
	progressFrame.setVisible(false);
	progressFrame.dispose();
	return false;
}

// Get ROI from user

// All units in pixels
// IJ.run(overviewImp, "Set Scale...", "distance=" + (Math.round((1/pixelSizeUm*100.0))/100.0) +  " known=1 pixel=1 unit=um");
overviewImp.show();
IJ.makeRectangle(0.1*overviewImp.getWidth(), 0.1*overviewImp.getHeight(), 0.8*overviewImp.getWidth(), 0.8*overviewImp.getHeight()); 
ij.gui.Toolbar.getInstance().setTool("rectangle");

JFrame roiSelectFrame = new JFrame("Scan region");

JLabel setupLabel = new JLabel("Adjust the scan region.");
setupLabel.setFont(normalFont);
roiSelectFrame.getContentPane().add(setupLabel, BorderLayout.NORTH);

JPanel roiButtonPanel = new JPanel(); //button panel
roiButtonPanel.setLayout(new GridLayout(0,1,0,0));
JPanel buttonPanel = new JPanel();
buttonPanel.setLayout(new GridLayout(1,2,20,20));
JButton cancelButton = new JButton("Cancel");
didCancel = false;
cancelButton.addActionListener(new ActionListener() {
	actionPerformed (e) {
		didCancel = true;
		notification.setText("Cancelling, please wait...");
	}
});
buttonPanel.add(cancelButton);
JButton okButton = new JButton("Continue");
clickOk = false;
okButton.addActionListener(new ActionListener() {
	actionPerformed (e) {
		clickOk = true;
	}
});
buttonPanel.add(okButton);
roiButtonPanel.add(buttonPanel);
roiButtonPanel.setBorder(BorderFactory.createEmptyBorder(10,10,10,10));
roiSelectFrame.getContentPane().add(roiButtonPanel, BorderLayout.SOUTH);

roiSelectFrame.pack();
roiSelectFrame.setSize(250, 200);
roiSelectFrame.setLocation(300,300);
roiSelectFrame.setVisible(true);
roiSelectFrame.setResizable(false);

// wait for button press to continue
while (!clickOk && !didCancel){
	Thread.sleep(200);
}
if (didCancel){
	mmc.setXYPosition(startX,startY);
	roiSelectFrame.setVisible(false);
	roiSelectFrame.dispose();
	progressFrame.setVisible(false);
	progressFrame.dispose();
	return false;
}
rect = overviewImp.getRoi().getBounds();
scanStartX = startX - rect.getX()*pixelSizeUm;
scanStartY = startY - rect.getY()*pixelSizeUm;
fieldSizeXmm = rect.getWidth()*pixelSizeUm/1000.0;
fieldSizeYmm = rect.getHeight()*pixelSizeUm/1000.0;
mmc.setXYPosition(scanStartX,scanStartY);
nPosX = Math.ceil(fieldSizeXmm / fieldOfViewXmm);
nPosY = Math.ceil(fieldSizeYmm / fieldOfViewYmm);

IJ.run(overviewImp, "Crop","");
roiSelectFrame.setVisible(false);
roiSelectFrame.dispose();

// ---------------------------------------------------------------------------------
// GET SCAN SETTINGS FROM USER
// ---------------------------------------------------------------------------------
 
directoryC = new DirectoryChooser("Choose the save directory:");
directoryC.setDefaultDirectory("D:\\User_Scratch");
saveDir = directoryC.getDirectory();


String[] mediaArray = new String[2]; 
mediaArray[0]="dry   "; 
mediaArray[1]="wet   "; 
String[] npArray = new String[2]; 
npArray[0]="bio-nps   "; 
npArray[1]="nanorod   ";

GenericDialog gd = new GenericDialog("Scan settings");

gd.addStringField("Save Directory:",saveDir, 30);
gd.addStringField("Chip Name","chip" ,15); 
gd.addMessage("");
gd.addRadioButtonGroup("Select media",mediaArray,1,2,"dry   "); 
gd.addMessage("");
gd.addRadioButtonGroup("Nanoparticle",npArray,1,3,"nanorod   "); 


gd.showDialog(); 
if (gd.wasCanceled()){
	progressFrame.setVisible(false);
	progressFrame.dispose();
	return false; 
}
// Get Inputs
saveDir = gd.getNextString();
saveFname = gd.getNextString();

immersionMedia = gd.getNextRadioButton(); 
nanoparticle = gd.getNextRadioButton(); 


// Figure out the correct polarizer settings
// For viruses, do not use polarization
linPol1 = 0;
// These must be initialized outside the conditional for proper scope
qwp1 = 0; qwp2 = 0; linPol2 = 0;
exposureTime = initExposureTime;
if (nanoparticle.equals("bio-nps   ")){ 
	// turn polarization off
	qwp1 = 60;
	qwp2 = 351;
	linPol2 = 0;
} else { // we are looking at nanorods
	qwp1 = 15;
	qwp2 = 40;
	linPol2 = 60;
	// set the exposure time depending on media - TODO: fiure out what these should actually be
	if(immersionMedia.equals("wet   ")){
		exposureTime = 150;
	} else {
		exposureTime = 150;

	}
}
mm.setExposure(exposureTime);

GenericDialog gd2 = new GenericDialog("Single particle scan");
gd2.addMessage("Set polarization optics to : " + linPol1 + " (Left-most), " + qwp1 + " (second on left), " + qwp2 + " (lower on right), " +  linPol2 + " (upper on right).");
gd2.showDialog();
if (gd2.wasCanceled()){
	progressFrame.setVisible(false);
	progressFrame.dispose();
	return false;
}


// prepare particle position list
f = new File(saveDir + saveFname + "_particleXY.txt");
if (!f.exists()){
	f.createNewFile();
}
FileOutputStream fos = new FileOutputStream(f);
BufferedWriter particleXYBuffer = new BufferedWriter(new OutputStreamWriter(fos));


// ---------------------------------------------------------------------------------
// DETERMINE CHIP FOCUS
// ---------------------------------------------------------------------------------

IJ.log("Focusing in the four corners:");

// Set up autofocus based on the objective we are using
afMgmt = mm.getAutofocusManager();
afMgmt.setAutofocusMethodByName("JAF(TB)");
af = afMgmt.getAutofocusMethod();
af.setPropertyValue("1st step size", "" + 5);
af.setPropertyValue("1st setp number", "" + 16); // note typo in API
af.setPropertyValue("2nd step size", "" + 1);
af.setPropertyValue("2nd step number", "" + 10);
af.setPropertyValue("Threshold", "" + .5);
af.setPropertyValue("Crop ratio", "" + 1);

// af.fullFocus();
topLeftZ = mmc.getPosition(); // we should already be in focus here.
IJ.log("Top Right:");
mmc.setXYPosition(scanStartX-1000.0*fieldSizeXmm, scanStartY);
// af.fullFocus();
topRightZ = mmc.getPosition();
IJ.log("Bottom Left:");
mmc.setXYPosition(scanStartX, scanStartY-1000.0*fieldSizeYmm);
// af.fullFocus();
botLeftZ = mmc.getPosition(); // we should already be in focus here.
IJ.log("Bottom Right:");
mmc.setXYPosition(scanStartX-1000.0*fieldSizeXmm, scanStartY-1000.0*fieldSizeYmm);
// af.fullFocus();
botRightZ = mmc.getPosition();

mmc.setXYPosition(scanStartX,scanStartY);
Thread.sleep(1000);


// ---------------------------------------------------------------------------------
// SCANNING
// ---------------------------------------------------------------------------------

// Shift particle positions so they line up with the overview image:
// https://github.com/derinsevenler/Spandex/issues/34
shiftParticleXUm = -20.2;
shiftParticleYUm = 12.3;

ImagePlus finalImp;
ImagePlus thisSlice; // declaration is required for correct scope

for (int idx=0; idx<nPosX; idx++){
	// Coordinate information for dead-reckoning X,Y,Z
	thisX = scanStartX - idx*fieldOfViewXmm*1000;
	colStartZ = topLeftZ + ((idx*fieldOfViewXmm)/fieldSizeXmm)*(topRightZ-topLeftZ);
	colEndZ = botLeftZ + ((idx*fieldOfViewXmm)/fieldSizeXmm)*(botRightZ-botLeftZ);
	
	mmc.setXYPosition(thisX+1000.0, scanStartY+1000.0);
	Thread.sleep((int)(fieldSizeYmm/stageSpeed*1000+1000));
	mmc.setXYPosition(thisX, scanStartY);
	Thread.sleep(1000);
	
	for (int idy=0; idy<nPosY; idy++){
		// Coordinate information for dead-reckoning X,Y,Z
		thisY = scanStartY - idy*fieldOfViewYmm*1000;
		thisZ = colStartZ + ((idy*fieldOfViewYmm)/fieldSizeYmm)*(colStartZ-colEndZ);
		// Move in X,Y,Z
		mmc.setXYPosition(thisX, thisY);
		mmc.setPosition(thisZ);
		Thread.sleep(1000);

		// Take Z-stack -------------------------------------------
		zStart = thisZ-zStackWidthUm/2;
		ImageStack thisZStack = new ImageStack((int)imWidth, (int)imHeight, (int)nZPos);
		for (int zidx=0; zidx< nZPos; zidx++) {
			mmc.setPosition(zStart+zidx*zStepUm);
			mmc.stopSequenceAcquisition();
			mmc.clearCircularBuffer();
			ImageStack burstStack = new ImageStack((int)imWidth, (int) imHeight, (int)burstFrameNo);
			ImagePlus burstImp = new ImagePlus("burst");
			mmc.waitForSystem();

			mmc.prepareSequenceAcquisition(mmc.getCameraDevice());
			mmc.startContinuousSequenceAcquisition(exposureTime/10.0);
			curFrame = 0;
			while ( curFrame < burstFrameNo ){
				if (mmc.getRemainingImageCount() > 0) {
					burstStack.setPixels(mmc.popNextImage(),curFrame+1);
					curFrame++;
				}
				else {
					// Wait for another image to arrive.
					Thread.sleep((int) Math.round(Math.min(.5 * exposureTime, 20)));
				}
			}
			mmc.stopSequenceAcquisition();
			mmc.clearCircularBuffer();

			// Point Grey camera issue: the first frame is always blank.
			burstStack.deleteSlice(1);
			burstImp.setStack(burstStack);
			zProjector.setImage(burstImp);
			zProjector.doProjection();
			thisZStack.setPixels(zProjector.getProjection().getProcessor().getPixels(), zidx+1);
			if(didCancel){
				break;
			}
		}
		if(didCancel){
			break;
		}

		// Perform Particle detection -------------------------------------------
		ImagePlus stackPlus = new ImagePlus("current Z stack", thisZStack);

		IJ.run(stackPlus,"Spandex Stack", "size=15 brightness=8 choose=D:\\User_Scratch\\_instrument_files\\resources\\nir_psf.tif");
		
		// Save Particle Positions -------------------------------------------
		IJ.renameResults("Particle Results","Results");
		resultsTable = ResultsTable.getResultsTable();
		xCol =  resultsTable.getColumnIndex("x");
		yCol =  resultsTable.getColumnIndex("y");
		xPos = resultsTable.getColumnAsDoubles(xCol);
		yPos = resultsTable.getColumnAsDoubles(yCol);
		for (k=0; k<xPos.length; k+=1){
			particleXYBuffer.write( IJ.d2s(xPos[k]*pixelSizeUm-(thisX-scanStartX)+shiftParticleXUm,3) + ", " + IJ.d2s(-yPos[k]*pixelSizeUm+(thisY-scanStartY)+shiftParticleYUm,3));
			particleXYBuffer.newLine();
		}
		IJ.selectWindow("Results");
		IJ.run("Close");

		// Check in with UI
		if(didCancel){
			break;
		}
		pctComplete = Math.round( (idx*nPosY+idy+1)*100/(nPosX*nPosY) );
		progressbar.setValue((int)pctComplete);
	}

	if(didCancel){
		break;
	}
}
scanLabel.setText("\u2611 3. Array Scanning");
scanLabel.setFont(boldFont);
progressbar.setValue(100);
notification.setText("Saving...");

// ---------------------------------------------------------------------------------
// SAVE RESULTS 
// ---------------------------------------------------------------------------------

particleXYBuffer.close();
fos.close();
System.gc();
mmc.setXYPosition(scanStartX, scanStartY);
mmc.setPosition(topLeftZ);
mmc.waitForSystem();

if(didCancel){
	notification.setText("Acquisition Canceled.");
} else {
	FileSaver fs = new FileSaver(overviewImp);
	fs.saveAsTiff(saveDir + saveFname + "_preview_image.tif");
	notification.setText("Scan Complete!");
	// IJ.log("Scan complete.\nPreview image saved as \n" + saveDir + saveFname + "_preview_image.tif \nParticle positions saved in \n" + saveDir + saveFname + "_particleXY.txt");
}